#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later

function createfolders()
	NewDataFolder/O root:Packages
	NewDataFolder/O root:Packages:myFolder
	NewDataFolder/O root:Packages:Fitdata
	Make/T/O/N=9 root:Packages:myFolder:Path
	NewDataFolder/O root:HSI
	NewDataFolder/O root:HSI:metadata
	NewDataFolder/O root:HSI:spec
	NewDataFolder/O root:HSI:rawspecs
	NewDataFolder/O root:HSI:spec:CosmicSpecs
	NewDataFolder/O root:HSI:roi
	NewDatafolder/O root:HSI:pixmatrixfolder
	make/O/N=1 root:Packages:myFolder:Pathnum
	variable/G root:Packages:myFolder:checkcosrem
	variable/G root:packages:myFolder:linearbg = 1
end

// 1. run code in createfolders()
// 2. compile
// 3. copy the files of the testdataset to root:HSI:rawspecs
// 4. run Initfrotestdata(10, 10, 1024) for 10x10 testdataset with 1024 pixels per spec
// 		Note: filenames are constructed by i*ic+j in loop, maybe change this
// 5. call loadpanel() but do NOT click load data
// 6. call addcosmicremloadpanel() to remove cosmics from data set
// 7. insert Cosmic width and Cosmic thresh on loadpanel, then click Remove Cosmics to remove cosmics from testdataset
// 8. call processpanel() to open processpanel, from here on continue as usual

// test data set instead of "real data": 
// multmasktoimg(root:hsi:spec:pixmatrix7, root:hsi:roi:roi2, "root:hsi:spec:pixmatrix7roi1")
// NewImage/K=0 root:HSI:spec:pixmatrix7roi1
// ColorScale/C/N=text0

function Initfortestdata(ic, jc, wlc)
	variable ic // corresponds to x
	variable jc // corresponds to j
	variable wlc // number of points in WL
	variable i
	variable j
	setdataFolder root:HSI:metadata
	make/O/N=(ic, 0) gridx
	wave gridx
	for (i=0; i<ic; i+=1)
		gridx[i] = i
	endfor
	make/O/N=(jc, 0) gridy
	wave gridy
	for (j=0; j<jc; j+=1)
		gridy[j] = j
	endfor
	setdatafolder root:HSI:metadata
	make /O/N=(wlc) WL
	wave wl
	for (i=0;i<wlc;i+=1) 
		WL[i]=i 
	endfor
	PutTestSpecIn3DWave(ic, jc)
	
end

function LoadPanel()
	createfolders()
    NewDataFolder/O root:Packages
    NewDataFolder/O root:Packages:myFolder
    Make/T/O/N=16 root:Packages:myFolder:Path
    Make/O/N=29 root:Packages:myFolder:Pathnum
    wave/T Path = root:Packages:myFolder:Path
    wave Pathnum = root:Packages:myFolder:Pathnum
    NVAR averagebg = root:packages:myfolder:linearbg
    Pathnum[3] = 10
    Pathnum[4] = 150
    NewPanel /W=(81,73,850,248)/N=Load_Panel
    Button FilesDir,pos={13.00,10.00},size={140.00,20.00},proc=ButtonProc,title="Select Data Folder",win=Load_Panel
    SetVariable FilesDirDialog,pos={168.00,13.00},size={800.00,14.00},value= Path[0], title="Path",win=Load_Panel
    Button DoIt,pos={13.00,41.00},size={100.00,20.00},proc=ButtonProc,title="Load Data",win=Load_Panel
    SetVariable SpecNameDialog,pos={168.00,41.00},size={170.00,14.00},value= Path[1], title="Spec Name",win=Load_Panel
    Checkbox averagebg, pos={350, 41}, title="use averaged BG",proc=CheckProc, variable=averagebg, win=Load_Panel     
    return 0
    
end

function addcosmicremonloadpanel()
	wave/T Path = root:Packages:myFolder:Path
	wave Pathnum = root:Packages:myFolder:Pathnum
	// create button elements for cosmic ray removal
	Button cosmicremoval,pos={13.00,65.00},size={140.00,20.00},proc=ButtonProc,title="Remove Cosmics",win=Load_Panel
    SetVariable coswidth,pos={168.00,65.00},size={170.00,14.00}, title="Cosmic width", proc=SetVarProc, value=Pathnum[3],win=Load_Panel
    SetVariable costhresh,pos={350,65.00},size={140.00,14.00}, title="Cosmic thresh", proc=SetVarProc, value=Pathnum[4],win=Load_Panel
    Checkbox showremcos, pos={500, 65}, title="Display removed Cosmics",proc=CheckProc, variable=checkcosrem, win=Load_Panel
end

function ProcessPanel()
	wave WLwave = root:HSI:metadata:WL
	wave/T Path = root:Packages:myFolder:Path
	wave Pathnum = root:Packages:myFolder:Pathnum
	wave/T roisw = root:packages:myfolder:roisw
	
	Pathnum[5] = 0
	Pathnum[6] = numpnts(WLwave)-1
	Pathnum[7] = WLwave[0]												// lambda min
	Pathnum[8] = WLwave[numpnts(WLwave)-1] 								// lambda max
	Pathnum[9] = (WLwave[numpnts(WLwave)-1]-WLwave[0])/numpnts(WLwave) 	// = dlambda der WL achse
	Pathnum[10] = WLwave[0]												// lambda min selection
	Pathnum[11] = WLwave[numpnts(WLwave)-1]								// lambda max selection
	Pathnum[12] = 0														// lambda min selection in pixels
	Pathnum[13] = numpnts(WLwave)-1										// lambda max selection in pixels
	buildfitwaves()
	buildroiselect()
	buildpixmatrixselect()
	
	NewPanel /W=(81,73,774,320)/N=Process_Panel
	Button GenIntHSI,pos={13.00,10.00},size={140.00,20.00},proc=ButtonProc,title="Integrate Pixels to HSI",win=Process_Panel
	SetVariable wl_start, title="WL start (min="+num2str(Pathnum[7])+" nm)",size={200,20},pos={170,10},proc=SetVarProc, value=Pathnum[10],win=Process_Panel
    SetVariable wl_end, title="WL end (min="+num2str(Pathnum[8])+" nm)",size={200,20},pos={400,10},proc=SetVarProc, value=Pathnum[11],win=Process_Panel
    Button PlotspecCA, pos={13.00,35.00},size={180.00,20.00},proc=ButtonProc,title="Plot Spectrum under Cursor A",win=Process_Panel
    Button PlotfitCA, pos={200.00,35.00},size={180.00,20.00},proc=ButtonProc,title="Plot spec & fit under Cursor A",win=Process_Panel
    // listbox to select fit function
    variable roiselect = 65
    Button updaterois, pos={13.00,roiselect},size={180.00,20.00},proc=ButtonProc,title="Update ROI List",win=Process_Panel
    Button updatepixmatrix, pos={13.00,roiselect+25},size={180.00,20.00},proc=ButtonProc,title="Update pixmatrix List",win=Process_Panel
    ListBox list0,pos={200.00,roiselect},size={100.00, 140},listWave=root:packages:myfolder:roisw
    ListBox list0,selWave=root:packages:myfolder:roiselect,mode=4
    Button multiplyroitopixmatrix, pos={13.00,roiselect+50},size={180.00,20.00},proc=ButtonProc,title="multiply roi to pixmatrix",win=Process_Panel

    ListBox list1,pos={320.00,roiselect},size={200.00,140},listWave=root:packages:myfolder:pixmatw
    ListBox list1,selWave=root:packages:myfolder:pixmatselect,mode=4
    Button plotselpixm, pos={530.00,roiselect},size={150.00,20.00},proc=ButtonProc,title="plot selected pixmatrix",win=Process_Panel
    Button plavpixm, pos={530.00,roiselect+25},size={150.00,20.00},proc=ButtonProc,title="selected pixmatrix spec",win=Process_Panel

    variable fitbuttonstart = roiselect + 150
    Button FitHSIcount, pos={13.00,fitbuttonstart},size={180.00,20.00},proc=ButtonProc,title="Fit Function to hsi count select",win=Process_Panel
    Button FitHSIroi, pos={13.00,fitbuttonstart+25},size={180.00,20.00},proc=ButtonProc,title="Fit Function to hsi roi select",win=Process_Panel
    SetVariable fittresh, title="count threshold for fit",size={200,20},pos={310,fitbuttonstart},proc=SetVarProc, value=Pathnum[14],win=Process_Panel
    ListBox list2,pos={200.00,fitbuttonstart},size={100.00,fitbuttonstart},listWave=root:packages:myfolder:fitfuncs
	ListBox list2,selWave=root:packages:myfolder:fitboxselect,mode=4
	Button FitFunctionplot, pos={13.00,fitbuttonstart+50},size={180.00,20.00},proc=ButtonProc,title="Plot Fit and Spec under cursor",win=Process_Panel
	Button FitParameterplot, pos={310.00,fitbuttonstart+25},size={180.00,20.00},proc=ButtonProc,title="Create HSI from Fitparameter",win=Process_Panel
	ListBox list3,pos={520.00,fitbuttonstart},size={200.00,200.00},listWave=root:packages:myfolder:fitfuncsplot
	ListBox list3,selWave=root:packages:myfolder:fitboxplotselect,mode=4
	
end

function buildroiselect()
	variable i
	string substr
	string roisw = "root:packages:myfolder:roisw"
	string rois = "root:packages:myfolder:roiselect"
	setdatafolder root:HSI:roi
	string a = wavelist("*", ";", "")
	variable nrois = ItemsInList(a)
	string stringspecwave = "root:HSI:roi"
	wave d = $stringspecwave
	Make/T/O/N=(nrois) $roisw
	Make/O/N=(nrois) $rois
	wave/T roisentries = $roisw
	for (i=0; i<ItemsInList(a); i+=1)
		substr = StringFromList(i,a)
		roisentries[i] = substr
	endfor
end

function buildpixmatrixselect()
	variable i
	string substr
	string pixmw = "root:packages:myfolder:pixmatw"
	string pixms = "root:packages:myfolder:pixmatselect"
	setdatafolder root:HSI:pixmatrixfolder
	string a = wavelist("*", ";", "")
	variable npixms = ItemsInList(a)
	string stringspecwave = "root:HSI:pixmatrixfolder"
	wave d = $stringspecwave
	Make/T/O/N=(npixms) $pixmw
	Make/O/N=(npixms) $pixms
	wave/T pixmsentries = $pixmw
	for (i=0; i<ItemsInList(a); i+=1)
		substr = StringFromList(i,a)
		pixmsentries[i] = substr
	endfor
end

function buildfitwaves()
	// create boxex to select fit function
	string fitbselect = "root:packages:myfolder:fitboxselect"
	Make/O/N=(6) $fitbselect
	wave fbs =$fitbselect
	string fitfuncs = "root:packages:myfolder:fitfuncs"
	Make/T/O/N=(6) $fitfuncs
	wave/T ffs = $fitfuncs
	ffs[0] = "gauss"
	ffs[1] = "lorentz"
	ffs[2] = "voigt"
	ffs[3] = "double gauss"
	ffs[4] = "double lorentz"
	ffs[5] = "double voigt"
	// create box to plot fit parameters
	string fitbplotselect = "root:packages:myfolder:fitboxplotselect"
	Make/O/N=(30) $fitbplotselect
	wave fbps =$fitbplotselect
	string fitfuncsplot = "root:packages:myfolder:fitfuncsplot"
	Make/T/O/N=(30) $fitfuncsplot
	wave/T ffsp = $fitfuncsplot
	ffsp[0] = "g k0"
	ffsp[1] = "g k1"
	ffsp[2] = "g k2"
	ffsp[3] = "g k3"
	ffsp[4] = "g sig1"
	ffsp[5] = "g sig2"
	ffsp[6] = "g sig3"
	ffsp[7] = "g sig4"
	ffsp[8] = "l k0"
	ffsp[9] = "l k1"
	ffsp[10] = "l k2"
	ffsp[11] = "l k3"
	ffsp[12] = "l sig0"
	ffsp[13] = "l sig1"
	ffsp[14] = "l sig2"
	ffsp[15] = "l sig3"
	ffsp[16] = "v k1"
	ffsp[17] = "v k2"
	ffsp[18] = "v k3"
	ffsp[19] = "v k4"
	ffsp[20] = "v k5"
	ffsp[21] = "v sig1"
	ffsp[22] = "v sig2"
	ffsp[23] = "v sig3"
	ffsp[24] = "v sig4"
	ffsp[25] = "v sig5"	
	
	// add further entries for the fit functions
	//ffsp[] = ""
	
end


// define buttons
Function ButtonProc(ctrlName) : ButtonControl
    String ctrlName
   
        wave/T Path = root:Packages:myFolder:Path
        variable refnum
   
        strswitch(ctrlName)
       
            case "SelectFile1"  :
                // get File Paths
                Open/D/R/F="*.tif"/M="Select fist file" refNum
                if (strlen(S_FileName) == 0) // user cancelled or some error occured
                    return -1
                endif
                Path[0] = S_fileName
                break
       
            case "FilesDir"   :
                // set outputfolder
                NewPath/Q/O OutputPath
                PathInfo OutputPath
                Path[0] = S_Path
                break
           
            case "DoIt" :      		
                LoadHSIData()
                addcosmicremonloadpanel()
                ProcessPanel()
                break
            
            case "GenIntHSI" :
            	integratehsispeclim(1)
            	buildpixmatrixselect()
            	break
            	
            case "cosmicremoval":
            	removecosmics()
            	break
            
            case "PlotspecCA":
				variable cx = pcsr(A)
            	variable cy = qcsr(A)
            	HSIplotspec(cx, cy, 0)
            	break
            
            case "plotfitCA":
				cx = pcsr(A)
            	cy = qcsr(A)
            	HSIplotspec(cx, cy, 1)            
            
            case "FitHSIcount":
            	FittoHSI(0)
            	break
            	
            case "FitHSIroi":
            	FittoHSI(1)
            	break
            	
            case "fitfunctionplot":
            	cx = pcsr(A)
            	cy = qcsr(A)
            	HSIplotspec(cx, cy, 1)
            	break
            
            case "updaterois":
            	buildroiselect()
            	break
            
            case "updatepixmatrix":
            	buildpixmatrixselect()
            	break
            
            case "multiplyroitopixmatrix":
            	variable roisel = 0
            	variable pixsel = 0
            	variable i
            	wave/T pixmw = $"root:packages:myfolder:pixmatw"
				wave/T roisw = $"root:packages:myfolder:roisw"
				pixsel = getpixmatselect()
				roisel = getroiselect()
         		string spix = "root:hsi:pixmatrixfolder:" + pixmw[pixsel]
         		string sro = "root:hsi:roi:" + roisw[roisel]
         		string newpixroi = "root:hsi:pixmatrixfolder:" + pixmw[pixsel] + roisw[roisel]
         		
         		multmasktoimg($spix, $sro, newpixroi)
         		buildpixmatrixselect()

            	break
            
            case "plotselpixm":
            	variable pixi
            	string selpixmat
            	wave/T pixmw = $"root:packages:myfolder:pixmatw"
				pixsel = getpixmatselect()
				plotpixmatrix(pixmw[pixsel]) // for different plot look: copy the plotpixmatrix function and substitute it here
            	break
            
            case "plavpixm": // variables: see case "plotselpixm" above
            	wave/T pixmw = $"root:packages:myfolder:pixmatw"
	            pixsel = getpixmatselect()
				AveragePixmatrixSpecs(pixmw[pixsel])
            	break
            
            case "FitParameterplot": // create HSI from fitparameter
            	fitparameter2pximatrix(1, getfitboxselect())
            	buildpixmatrixselect()
            	break
            	 
        EndSwitch
End

// create pixmatrix from hsi fit parameter
function fitparameter2pximatrix(showimage, fitwaveN)
	variable showimage
	variable fitwaveN
	updateWLInput()
	wave/T path = root:Packages:myFolder:Path
	wave pathnum = root:Packages:myFolder:Pathnum
	wave fitstorewave = root:
	//wave pixmatrix = $"root:HSI:spec:PixMatrix1"
	variable i
	variable j
	variable l
	
	wave gridx = root:HSI:metadata:gridx
	wave gridy = root:HSI:metadata:gridy
	wave WL = root:HSI:metadata:WL
	wave fitmat = root:HSI:spec:fitparameter
	wave xax = root:hsi:metadata:gridx
	wave yax = root:hsi:metadata:gridy
	l = 0
	string stringspecwave = "root:HSI:pixmatrixfolder:pixmatrix" + num2str(i)
	do 
		l+=1
		stringspecwave = "root:HSI:pixmatrixfolder:pixmatrix" + num2str(l)
	while (waveexists($stringspecwave)==1)
	pathnum[15] = l 
	Make/O /N=(numpnts(xax), numpnts(yax)) $stringspecwave
	wave d = $stringspecwave
	print fitwaveN
	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			d[i][j] = fitmat[i][j][fitwaveN]
		endfor
	endfor
	setnote($stringspecwave, "Integrated WL start [nm]", num2str(wl[pathnum[12]]))
	setnote($stringspecwave, "Integrated WL end [nm]", num2str(wl[pathnum[13]]))
	if (showimage == 1)
		string pixmattopl = "pixmatrix" + num2str(l)
		wave pixmatrixplot = $stringspecwave
		plotpixmatrix(pixmattopl)
	endif
end

// average the given pixelmatrix to one spectrum and savit
function AveragePixmatrixSpecs(pixmatrixsel)
	string pixmatrixsel
	variable i
	variable j
	variable k
	wave hsidata = root:hsi:spec:hsidata
	wave WL = root:hsi:metadata:wl
	string spix = "root:hsi:pixmatrixfolder:" + pixmatrixsel
	print spix
	variable xpts = dimsize($spix, 0)
	variable ypts = dimsize($spix, 1)
	wave pixmat2av = $spix
	variable specavnum = 0
	string avspecname = "root:hsi:spec:" + pixmatrixsel + "spec"
	Make/O/N=(numpnts(WL)) $avspecname
	wave avspec = $avspecname
	avspec = 0
	for (i=0; i<xpts; i+=1)
		for (j=0; j<ypts; j+=1)
			if (numtype(pixmat2av[i][j]) == 2)
			else 
				specavnum += 1
				for (k=0; k<numpnts(WL); k+=1)
					avspec[k] += hsidata[i][j][k]
				endfor
				print specavnum, i, j
			endif
		endfor
	endfor
	avspec /= specavnum
	display avspec vs WL
	Label bottom "wavelength / nm"
	Label left "PL / counts"
	
end

function HSIplotspec(x, y, plotfit)
	variable plotfit
	variable x
	variable y
	variable i
	wave pathnum = root:packages:myfolder:pathnum
	wave wl = root:HSI:metadata:Wl
	wave hsiptr = root:hsi:spec:hsidata
	string spec = "root:HSI:spec:specx" + num2str(x) + "y" + num2str(y)
	Make/O/N=(numpnts(WL)) $spec
	wave d =$spec
	for (i=0; i<numpnts(WL); i+=1)
		d[i] = hsiptr[x][y][i]
	endfor
	//Setnote($n4, "Coordinates", wavenote)
	setnote(d, "x[pixel]", num2str(x))
	setnote(d, "y[pixel]", num2str(y))
	setnote(d, "x[mum]", num2str(x*pathnum[16]))
	setnote(d, "y[mum]", num2str(y*pathnum[17]))
	display d vs WL
	Label bottom "wavelength / nm"
	Label left "PL / counts"
	if (plotfit == 1)
		if (getfitboxselect() == 1)
			setdatafolder root:packages:Fitdata
			wave fitwave = root:hsi:
			make/O/N=(numpnts(WL)) fitdispw
			make/O/N=4 fitparametr
			wave fp = fitparameter
			//fp[0] = 
			//fp[1] =
		endif
	endif
End

function LoadHSIData()

	setdatafolder root:
	
    NewDataFolder/O root:Packages
    NewDataFolder/O root:Packages:myFolder
    //Make/T/O/N=7 root:Packages:myFolder:Path
    
    wave/T Path = root:Packages:myFolder:Path
       		         		
    KillDataFolder/Z HSI
    
    NewDataFolder/O root:HSI
    NewDataFolder/O root:HSI:metadata
    NewDataFolder/O root:HSI:spec
    NewDataFolder/O root:HSI:rawspecs
   	
    setdatafolder root:
    
    LoadDF1(Path[0], Path[1], Path[2])
    
end

function makeFigure(wX, wY)
	wave wX, wY
	Display wX vs wY
	ModifyGraph mode=4,marker=19,msize=5,lsize=2,lstyle=3,rgb=(52428,1,42942)
	Label left "\\Z14Speed"; DelayUpdate
	Label bottom "\\Z14Distance"; DelayUpdate
	ModifyGraph axThick=1.5
	ModifyGraph margin(left)=216, margin(bottim)=72, margin(right)=72, margin(top)=72
end function

function doFigureIfFlagged(wX, wY, doPlot)
	wave wX, wY
	int doPlot
	
	if(doPlot == 1)
		makeFigure(wX, wY)
	endif
end function

function loadfit() 
    string filename=""                             
    string pathname=""

    newpath/o temporaryPath
        if (v_flag!=0)
            return -1
        endif
    pathname= "temporarypath"

        /// Proceed to the loading waves from the selected folder!
end function  

static function /s sanitizeFPath(path)
    // Avoid annoyances with escape characters when using Microsoft Windows directories.
   
    string path
    path = replaceString("\t", path, "\\t")
    path = replaceString("\r", path, "\\r")
    path = replaceString("\n", path, "\\n")

    return path
end

function clearall()
	setdatafolder root:
	Killwaves/Z /A
	Killvariables/Z /A
	KillDataFolder/Z Packages
	KillDataFolder/Z HSI
	
end

// Given a path to a folder on disk, gets all files ending in "ext"
Function/S findallFiles(path, ext[, recurse])
// By default, subfolders are searched. Turn off with recurse=0.
// 2017-05-02, joel corbin
//
    string path, ext; variable recurse
   
    if (paramIsDefault(recurse))
        recurse=1
    endif
    path = sanitizeFilePath(path)                                               // may not work in extreme cases
   
    string fileList=""
    string files=""
    string pathName = "tmpPath"
    string folders =path+";"                                                    // Remember the full path of all folders in "path" & search each for "ext" files
    string fldr
    
    string thelist 
    variable nt
    
    do
        fldr = stringFromList(0,folders)
        NewPath/O/Q $pathName, fldr                                             // sets S_path=$path, and creates the symbolic path needed for indexedFile()
        PathInfo $pathName
        files = indexedFile($pathName,-1,ext)                                   // get file names
        if (strlen(files))
            files = fldr+":"+ replaceString(";", removeEnding(files), ";"+fldr+":") // add the full path (folders 'fldr') to every file in the list
            fileList = addListItem(files,fileList)
        endif
        if (recurse)
            folders += indexedDir($pathName,-1,1)                               // get full folder paths
        endif
        folders = removeFromList(fldr, folders)                                 // Remove the folder we just looked at
    while (strlen(folders))
    KillPath/Z $pathName
    return filelist
end

static function /s sanitizeFilePath(path)
    // Avoid annoyances with escape characters when using Microsoft Windows directories.
   
    string path
    path = replaceString("\t", path, "\\t")
    path = replaceString("\r", path, "\\r")
    path = replaceString("\n", path, "\\n")

    return path
end

Function SetNote(wavenm, noteKey, newValueStr)
    WAVE wavenm
    string noteKey
    string newValueStr
   
    if(stringmatch(newValueStr,""))
        note/k wavenm, removebykey(noteKey,Note(wavenm),":","\r")
    else
        note/k wavenm, replacestringbykey(noteKey,Note(wavenm)," "+newValueStr,":","\r")
    endif
end

Function/S GetNote(wavenm,noteKey)
    WAVE wavenm
    string noteKey
    return stringbykey(noteKey,note(wavenm),":","\r")[1,inf]
end

Function LoadDF1(pathName, spechead, startHSIcount)
	String pathName
	String spechead
	String startHSIcount
	variable HSI0 = str2num(startHSIcount) + 64000
	String extension
	string name
	string opennames 
	string specfolder = "root:HSI:rawspecs:"
	string metadataf = "root:HSI:metadata:"
	string iasstr
	string wavenote
	variable i
	variable j
	variable k
	
	Variable refNum
	string filePath
	string allfilesindir
	
 	name = spechead + "_" //"spectrum_"
 	extension = ".txt" 	
 	opennames = findallFiles(pathName, extension)
 	wave pathnum = root:packages:myfolder:pathnum
 	
 	variable ic 
 	variable vin 
 	vin = itemsInList(opennames)
 	setdatafolder root:HSI:rawspecs
 	//wave wave1, wave2
 	string metadata
 	variable posx = 300
 	variable posy = 300
 	variable xmin = 300
 	variable xmax = 0
 	variable ymin = 300
 	variable ymax = 0
 	variable dx = 300
 	variable dy = 300
 	variable newdx = 0
 	variable newdy = 0
 	
 	
 	for (i=0; i<vin; i+=1)
	 	iasstr = stringfromlist(2, stringfromlist(1, stringfromlist(i, opennames, ".txt"), "::"), "_")
	 	if (str2num(iasstr) == 0)
	 		hsi0 = 0
	 		break
	 	elseif (str2num(iasstr) < hsi0)
	 		hsi0 = str2num(iasstr)
	 	endif
 	endfor
 	
 	for (ic=HSI0; ic<vin+HSI0; ic+=1)
 		sprintf iasstr "%05d", ic
 		string n1 = pathName + name + iasstr + extension
 		string n2 = pathName + name + iasstr + ".txt"
 		string n3 = pathName + name + iasstr
 		string n4 = name + iasstr
 		string n5 = pathName + name + iasstr + ".ibw"
 		string n6 = name + num2str(ic) //+ ".txt"
 		string Laserpos = "Laser Position"
 	
		string linedata
 		
 		// read the file and read the data
 		Loadwave/N/O/G/Q/C n1 // /G for .txt instead of /H for .ibw
 		wave wave0, wave1, wave2
 		if (ic == 0)
 			duplicate/O wave0, root:HSI:metadata:WL
 			duplicate/O wave1, root:HSI:metadata:BG
 			print numpnts(root:HSI:metadata:BG)
 			NVAR averagebg = root:packages:myfolder:linearbg
 			if (averagebg == 1)
 				variable bgav = sum(root:HSI:metadata:BG)/numpnts(root:HSI:metadata:BG)
 				wave bgw = root:HSI:metadata:BG
 				if (waveExists(root:HSI:metadata:BG_uncorrected) == 1)
 					killwaves root:HSI:metadata:BG_uncorrected
 				endif
 				duplicate root:HSI:metadata:BG root:HSI:metadata:BG_uncorrected
 				bgw = bgav
 			endif
 		endif
 		
 		wave2 -= wave1 //root:HSI:metadata:BG
 		duplicate/O wave2, $n4
 		
 		// first try to read x and y coordinates
 		Loadwave/O/Q/C n5 // now late .ibw file to obtain meta data
 		metadata = stringfromlist(2, note($n6))
 		killwaves $n6
 		
 		posx = str2num(stringfromlist(1, stringfromlist(22, metadata, "\n"), ":"))
 		posy = str2num(stringfromlist(1, stringfromlist(23, metadata, "\n"), ":"))
 		
 		wavenote = "x=" + num2str(posx) + ";y=" + num2str(posy) + ";"
 		Setnote($n4, "Coordinates", wavenote)
 		
 		if (posx < xmin)
 			xmin = posx
 		endif
 		
 		newdx = posx - xmin
 		if (newdx < dx)
 			if (newdx > 0)
 				dx = posx - xmin
 			endif
 		endif
 		if (posx > xmax)
 			xmax = posx
 		endif
 		
 		if (posy < ymin)
 			ymin = posy
 		endif
 		
 		newdy = posy - ymin
 		if (newdy < dy)
 			if (newdy > 0)
 				dy = posy - ymin
 			endif
 		endif
 		if (posy > ymax)
 			ymax = posy
 		endif
  	endfor
  	killwaves wave0, wave1, wave2
  	
  	setdatafolder root:HSI:metadata:
    make/O/N=(1024, 0) WL
    wave WL = root:HSI:metadata:WL
    make/O/N=(Ceil((xmax-xmin)/dx)+1, 0) gridx
    make/O/N=(Ceil((ymax-ymin)/dy)+1, 0) gridy
  	
 	variable new
  	// generate dx and dy matrix axes
  	for (ic=0; ic<=(xmax-xmin)/dx; ic+=1)
  		new = ic*dx
  		gridx[ic] = new
  	endfor
  	for (ic=0; ic<=(ymax-ymin)/dy; ic+=1)
  		new = ic*dy
  		gridy[ic] = new
  	endfor
  	setdatafolder root:hsi:spec
  	Make/O /N=((xmax-xmin)/dx+1, (ymax-ymin)/dy+1, numpnts(WL)) hsidata
	if (exists("root:HSI:pixmatrixfolder")== 1)  	// I have no idea why this folder way sometimes
	  	setdatafolder root:HSI:pixmatrixfolder
	else
		NewDatafolder/O root:HSI:pixmatrixfolder
		setdatafolder root:HSI:pixmatrixfolder
	endif
	if (exists("root:HSI:roi")== 0)  	// I have no idea why this folder way sometimes
		NewDatafolder/O root:HSI:roi
	endif
		
  	Make/O /N=((xmax-xmin)/dx+1, (ymax-ymin)/dy+1) pixmatrix
  	setdatafolder root:HSI:spec
  	Make/O /N=((xmax-xmin)/dx+1, (ymax-ymin)/dy+1, 100) Fitparameter // set here number of parameters that can be obtained by fit
  	wave fit = $"Fitparameter"
  	for (i=0; i<(xmax-xmin)/dx+1; i+=1)
  		for (j=0; j<(ymax-ymin)/dy+1; j+=1)
  			for (k=0; k<(ymax-ymin)/dy+1; k+=1)
  				fit[i][j][k] = NaN
  			endfor
  		endfor
  	endfor
  	
  	
  	setdatafolder root:
  	if (gridx[1] - gridx[0] > 0)
  		pathnum[16] = gridx[1] - gridx[0]
  	endif
  	if (gridy[1] - gridy[0] > 0)
  		pathnum[17] = gridy[1] - gridy[0]
  	endif

  	PutSpecIn3DWave(xmin, ymin, dx, dy)

END

Function sumupcosmics()
	wave Pathnum = root:Packages:myFolder:Pathnum 
	wave Path = root:Packages:myFolder:Path			// width 3, tgresh 4
	variable i
	variable j
	variable k
	string substr
	variable costhresh = Pathnum[4]
	setdatafolder root:HSI:spec:
	
	wave d = root:HSI:hsidata
	duplicate/O/D root:HSI:spec:hsidata, root:HSI:spec:hsidatad
	differentiate /dim=2 root:HSI:spec:hsidatad

	wave gridx = root:HSI:metadata:gridx
	wave gridy = root:HSI:metadata:gridy
	wave WL = root:HSI:metadata:WL
	wave hsiptr = root:HSI:spec:hsidatad
	make/O/N=(numpnts(WL), 0) currcol
	wave currcol
	Make/O/N=(numpnts(WL), 0) diffoverth
	wave diffoverth
	Make/O/N=(numpnts(WL), 0) diffunderth
	wave diffunderth
	
	variable countcosmics = 0
	variable somecosmics = 0
	
	// init diffoverth and diffoverth with zeros
	for (k=0; k<numpnts(WL); k+=1)
		diffoverth[k] = 0
		diffunderth[k] = 0
	endfor

	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			make/O/N=(numpnts(WL), 0) currcol
			// diffoverth and diffunterth collect cosmic start and end
			for (k=0; k<numpnts(WL); k+=1)
				if (hsiptr[i][j][k] > costhresh)
					diffoverth[k] += hsiptr[i][j][k]
					somecosmics = 1
				endif
				if (hsiptr[i][j][k] < -costhresh)
					diffunderth[k] += hsiptr[i][j][k]
					somecosmics = 1
				endif
			endfor
		endfor
	endfor
End

Function removecosmics()
	wave Pathnum = root:Packages:myFolder:Pathnum 
	wave/T Path = root:Packages:myFolder:Path // width 3, tgresh 4
	NVAR checkcosrem = root:Packages:myFolder:checkcosrem
	// iterators
	variable i // col
	variable j // row
	variable k // spec
	variable l // spec to remove cosmics
	string substr
	variable costhresh = Pathnum[4]
	variable coswidth = Pathnum[3]
	setdatafolder root:HSI:spec:
	
	wave hs = root:HSI:spec:hsidata
	duplicate/O/D root:HSI:spec:hsidata, root:HSI:spec:hsidatad
	duplicate/O/D root:HSI:spec:hsidata, hsidatanocrm
	differentiate /dim=2 root:HSI:spec:hsidatad

	wave gridx = root:HSI:metadata:gridx
	wave gridy = root:HSI:metadata:gridy
	wave WL = root:HSI:metadata:WL
	wave hsiptrd = root:HSI:spec:hsidatad
	
	variable countcosmics = 0
	variable somecosmics = 0
	
	// now iterate over 3D wave to find cosmics
	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			for (k=0; k<numpnts(WL); k+=1)
				if (abs(hsiptrd[i][j][k]) > costhresh)
					somecosmics = 1
					break
				endif
			endfor
			
			if (somecosmics == 1)
				// display old spectrum with cosmic
				string plotname = "wi" + num2str(i) + "j"+ num2str(j)
				variable cstart = 0
				variable cend = 0
				variable reading = 0
				// reading: 
				// 0=looking for cosmic, 
				// 1=up started, 2=down found, 3=up-down pair detected
				// 4=down started, 5=up found, 6=down-up pair detected
				for (k=0; k<numpnts(WL); k+=1)
					// cosmic start
					if (reading == 0)
						if (hsiptrd[i][j][k] > costhresh)
							cstart = k
							reading = 1 // cosmic up started
						elseif (hsiptrd[i][j][k] < -costhresh)
							cstart = k
							reading = 4 // cosmic down started
						endif
					// find cosmic end
					elseif (reading > 0)
						if (k-cstart <= coswidth) 
							if (reading == 1)
								if (hsiptrd[i][j][k] < -costhresh)
									// started with up, now detected down
									reading = 2
								endif
							elseif (reading == 2)
								if (hsiptrd[i][j][k] > -costhresh)
									cend = k
									reading = 3
								endif
							elseif (reading == 4)
								if (hsiptrd[i][j][k] > costhresh)
									// started with down, now detected up
									reading = 5
								endif
							elseif (reading == 5)
								if (hsiptrd[i][j][k] < costhresh)
									cend = k
									reading = 6
								endif
							endif
						else
							// did not find cosmic within width
							reading = 0
						endif
						// cosmic start and end identified, now remove them
						if (reading == 3 || reading == 6 )
							variable ci
							variable cj
							variable cl
							variable findcs
							for (l=cstart; l<cend; l+=1)
								if (i>0&&j>0&&l>0&&i<numpnts(gridx)-1&&j<numpnts(gridy)-1&&l<numpnts(WL)-1)
									// set the cosmic to the average value of the other pixels around it
									hs[i][j][l] = (hs[i-1][j-1][l]/sqrt(2)+hs[i-1][j][l]+hs[i-1][j+1][l]/sqrt(2)+hs[i][j-1][l]+hs[i][j+1][l]+hs[i+1][j-1][l]/sqrt(2)+hs[i+1][j][l]+hs[i+1][j+1][l]/sqrt(2))/(4+4/sqrt(2))
								else // at the edges of the HSI, select different methode
									// last or first WL pixel cosmic: set zero instead of interplating, since last WL pixel might also contain straylight and should never be located in a relevant spectral area
									print 2
									if (l==0||l>=numpnts(WL))
										hs[i][j][l] = 0
									elseif (i==0)
										if (j==0)
											hs[i][j][l] = (hs[i+1][j][l]+hs[i][j+1][l]+hs[i+1][j+1][l]/sqrt(2))/(2+1/sqrt(2))
										elseif (j>=numpnts(gridy))
											hs[i][j][l] = (hs[i+1][j][l]+hs[i][j-1][l]+hs[i+1][j-1][l]/sqrt(2))/(2+1/sqrt(2))
										else
											hs[i][j][l] = (hs[i][j-1][l]+hs[i][j+1][l]+hs[i+1][j-1][l]/sqrt(2)+hs[i+1][j][l]+hs[i+1][j+1][l]/sqrt(2))/(3+2/sqrt(2))
										endif
									elseif (i>=numpnts(gridx))
										if (j==0)
											hs[i][j][l] = (hs[i-1][j][l]+hs[i][j+1][l]+hs[i-1][j+1][l]/sqrt(2))/(2+1/sqrt(2))
										elseif (j>=numpnts(gridy)-1)
											hs[i][j][l] = (hs[i-1][j][l]+hs[i][j-1][l]+hs[i-1][j-1][l]/sqrt(2))/(2+1/sqrt(2))
										else
											hs[i][j][l] = (hs[i][j-1][l]+hs[i][j+1][l]+hs[i-1][j-1][l]/sqrt(2)+hs[i-1][j][l]+hs[i-1][j+1][l]/sqrt(2))/(3+2/sqrt(2))
										endif
									endif
								endif
							endfor
							reading = 0
							somecosmics = 0
							// plot original spec and cosmic
							if (checkcosrem > 0)
								display/N=$plotname hsidatanocrm [i][j][]
								ModifyGraph rgb(hsidatanocrm)=(0,0,0)
								AppendToGraph/W=$plotname/L/B hs[i][j][]
							endif
						endif
					endif
				endfor
			endif
		endfor
	endfor
END

function PutTestSpecIn3DWave(imax, jmax)
	variable imax
	variable jmax
	string substr
	variable i
	variable j
	variable k
	wave WL = root:HSI:metadata:WL
	setdatafolder root:HSI:spec
	Make/O /N=(imax, jmax, numpnts(WL)) hsidata
	setdatafolder root:HSI:rawspecs
	string a = wavelist("*", ";", "")
	string stringspecwave = "root:HSI:spec:hsidata"
	wave d = $stringspecwave
	for (i=0; i<imax; i+=1)
		for (j=0; j<jmax; j+=1)
			substr = StringFromList(i*imax+j,a)
			wave c = $substr
			for (k=0; k<1023; k+=1)
				d[i][j][k] = c[k]
			endfor
		endfor
	endfor
End

Function PutSpecIn3DWave(xmin, ymin, dx, dy)
	variable xmin
	variable ymin
	variable dx
	variable dy
	string substr
	variable i
	variable j
	variable gridx
	variable gridy
	wave WL = root:HSI:metadata:WL
	setdatafolder root:HSI:rawspecs
	string a = wavelist("*", ";", "")
	string stringspecwave = "root:HSI:spec:hsidata"
	wave d = $stringspecwave
	for (i=0; i<ItemsInList(a); i+=1)
		substr = StringFromList(i,a)
		wave c = $substr
		gridx = (str2num(stringfromlist(0, stringfromlist(1, note(c), "x="), ";"))-xmin)/dx
		gridy = (str2num(stringfromlist(0, stringfromlist(1, note(c), "y="), ";"))-ymin)/dy
		for (j=0; j<1023; j+=1)
			d[gridx][gridy][j] = c[j]
		endfor
	endfor
End

Function IntHSItoPixMatrix()
	wave gridx = $"gridx"
	wave gridy = $"gridy"
	wave pixmat = $"root:HSI:pixmatrixfolder:PixMatrix"
	wave hsidata = $"root:HSI:spec:hsidata"
	setdatafolder root:HSI:metadata
	variable i
	variable j
	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			root:HSI:spec:pixmat[i][j] = 1//sum(hsidata[i][][])
		endfor
	endfor
End

Function updateWLInput()
	wave/T path = root:Packages:myFolder:Path
	wave pathnum = root:Packages:myFolder:Pathnum
	wave WL = root:HSI:metadata:WL
	variable i
	variable j
	// check if wavemin and wavemax are within WL limits
	if (pathnum[10] >= pathnum[7])
		if (pathnum[10] <= pathnum[8])
		else
			pathnum[10] = pathnum[7]
		endif
	else
		pathnum[10] = pathnum[7]
	endif
	if (pathnum[11] <= pathnum[8])
		if (pathnum[11] >= pathnum[7])
		else
			pathnum[11] = pathnum[8]
		endif
	else
		pathnum[11] = pathnum[8]
	endif
	pathnum[12] = pathnum[10]
	for (i=0; i<numpnts(WL)-1; i+=1)
		if (Wl[i] >= pathnum[10])
			pathnum[12] = i
			break
		endif
	endfor
	pathnum[13] = pathnum[6]
	for (i=numpnts(WL)-1; i>=0; i-=1)
		if (Wl[i] <= pathnum[11])
			pathnum[13] = i
			break
		endif
	endfor	
	
end

Function Integratehsidata()
	wave/T path = root:Packages:myFolder:Path
	wave pathnum = root:Packages:myFolder:Pathnum
	setdatafolder root:HSI:spec
	wave intmap = $"root:HSI:spec:intmap"
	wave hsidata = $"root:HSI:spec:hsidata"
	sumdimension/D=2 /DEST=intmap hsidata
	newimage intmap
	ModifyImage intmap ctab= {*,*,YellowHot256,0}
End

Function Integratehsispeclim(showimage) // showimage = 1 to display
	variable showimage
	updateWLInput()
	wave/T path = root:Packages:myFolder:Path
	wave pathnum = root:Packages:myFolder:Pathnum
	//wave pixmatrix = $"root:HSI:spec:PixMatrix1"
	variable i
	variable j
	variable k
	variable l
	
	wave gridx = root:HSI:metadata:gridx
	wave gridy = root:HSI:metadata:gridy
	wave WL = root:HSI:metadata:WL
	wave hsiptr = root:HSI:spec:hsidata
	wave xax = root:hsi:metadata:gridx
	wave yax = root:hsi:metadata:gridy
	l = 0
	string stringspecwave = "root:HSI:pixmatrixfolder:pixmatrix" + num2str(i)
	do 
		l+=1
		stringspecwave = "root:HSI:pixmatrixfolder:pixmatrix" + num2str(l)
	while (waveexists($stringspecwave)==1)
	pathnum[15] = l 
	Make/O /N=(numpnts(xax), numpnts(yax)) $stringspecwave
	wave d = $stringspecwave
	
	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			d[i][j] = 0
			for (k=pathnum[12]; k<=pathnum[13]; k+=1)
				d[i][j] += hsiptr[i][j][k]
			endfor
		endfor
	endfor
	setnote($stringspecwave, "Integrated WL start [nm]", num2str(wl[pathnum[12]]))
	setnote($stringspecwave, "Integrated WL end [nm]", num2str(wl[pathnum[13]]))
	if (showimage == 1)
		string pixmattopl = "pixmatrix" + num2str(l)
		wave pixmatrixplot = $stringspecwave
		plotpixmatrix(pixmattopl)
		scalepixmatrix(l)
//		newimage pixmatrixplot
//		string pixmatrixn = "pixmatrix"+num2str(l)
//		ModifyImage $pixmatrixn ctab= {*,*,YellowHot256,0}
//		ColorScale/C/N=text0 "counts"
//		scalepixmatrix(l)
//		ModifyGraph margin(right)=85
//		ModifyGraph fSize(left)=13
//		ModifyGraph fSize(top)=13
//		ModifyGraph margin(left)=20
//		ModifyGraph margin(top)=20
//		Label top "\\Z15"
//		// create colorscale
//		ColorScale/C/N=text0 image=$pixmatrixn
//		ModifyGraph lblLatPos(top)=118;DelayUpdate
//		Label top "\\Z15 μm"
	endif
end

// change something on the image here, suggestion: create a copy of plotmatrix(mname) and use the modified copy in ButtonProc function. 
// Maybe consider adding the function also to the
function plotpixmatrix(mname)
	string mname
	string pixmatplotnam = "root:HSI:pixmatrixfolder:" + mname
	wave pixmatplot = $pixmatplotnam
	newimage pixmatplot
	ModifyImage $mname ctab= {*,*,YellowHot256,0}
	ColorScale/C/N=text0 "counts"
	ColorScale/C/N=text0/A=RC/X=-67.79/Y=-0.37
	ModifyGraph margin(right)=140, height=200, width=200
	ModifyGraph fSize(left)=15
	ModifyGraph fSize(top)=15
	ModifyGraph margin(left)=20
	ModifyGraph margin(top)=20
	ModifyGraph margin(bottom) = 25
	ColorScale/C/N=text0 image=$mname
	ColorScale/C/N=text0 fsize=15
	ModifyGraph lblLatPos(top)=115;DelayUpdate
	Label top "\\Z15 μm"
	ModifyGraph lblLatPos(left)=115;DelayUpdate
	Label left "\\Z15 μm"
end

Function SetVarProc(sva) : SetVariableControl
        STRUCT WMSetVariableAction &sva
 
        switch(sva.eventCode)
               case 1:
               break
               case 2:
               	  	string/g sam = sva.sval
                  if(cmpstr(sva.ctrlname,"temp_list")==0)
                     print sva.ctrlname
                   endif
               break
               case 3:
               		string/g sam = sva.sval
                  if(cmpstr(sva.ctrlname,"temp_list")==0)
                     print sva.ctrlname
                   endif
                     break
        endswitch
        return 0
end

Function ButtonProct(ba) : ButtonControl
	Struct WMButtonAction &ba
	
	switch (ba.eventCode)
		case 2: // mouse up
			// click code here
			break
		case -1: // control being killed
			break
	endswitch
	
	return 0
End
	
Function CheckProc(cba) : CheckBoxControl
	STRUCT WMCheckboxAction &cba
		switch(cba.eventCode)
		case 2: // Mouse up
			Variable checked = cba.checked
			break
		case -1: // Control being killed
			break
		endswitch
	return 0
End

Function dolistbox(ba) : ButtonControl
	STRUCT WMButtonAction &ba

	switch( ba.eventCode )
		case 2: // mouse up
			// click code here
			wave fitbselect = root:packages:myfolder:fitboxselect
			wave/t fitfuncs = root:packages:myfolder:fitfunctions
			variable index, maxindex
			maxindex = numpnts(fitbselect)
			for(index=0;index<maxindex;index+=1)
				if(fitbselect[index])
					print fitfuncs[index]+"\r"
				endif
			endfor
			break
		case -1: // control being killed
			break
	endswitch
	return 0
End

function multmasktoimg(image, mask, newname)
	wave image
	wave mask
	string newname
	variable xpts = dimsize(image, 0)
	variable ypts = dimsize(image, 1)
	//make/O/N=(xpts, ypts) $newname
	variable i, j // iterator
	
	duplicate/O image $newname
	wave imgdup = $newname
	for (i=0; i<xpts; i+=1)
		for (j=0; j<ypts; j+=1)
			if (mask[i][j] == 0)
				imgdup[i][j] = Nan
			else
				imgdup[i][j] = image[i][j]*mask[i][j]
			endif
		endfor
	endfor
end

function scalepixmatrix(pixmatrixn)
	variable pixmatrixn
	wave pathnum = root:packages:myfolder:pathnum
	wave pixmatrix = root:hsi:pixmarixfolder:pixmatrix1
	wave gridx = root:hsi:metadata:gridx
	wave gridy = root:hsi:metadata:gridy
	variable gdx = gridx[1]-gridx[0]
	variable gdy = gridy[1]-gridy[0]
	setdatafolder root:hsi:pixmatrixfolder
	string pixmatrixname
	pixmatrixname = "root:hsi:pixmatrixfolder:pixmatrix" + num2str(pixmatrixn)
	Setscale/P x, 0, gdx, $pixmatrixname
	Setscale/P y, 0, gdy, $pixmatrixname
	ModifyGraph lblLatPos(top)=118;DelayUpdate
	Label top "\\Z15 μm"
end

function getroiselect()
	variable roisel = 0
	variable i
	wave rois = root:packages:myfolder:roiselect
	if (numpnts(rois)== 0)
		return Nan
	endif
	for (i=0; i<numpnts(rois); i+=1)
		if (rois[i]==1)
			roisel = i
			break
		endif
	endfor
	return roisel
end
	
function getpixmatselect()
	variable pixsel = 0
	variable i
	wave rois = root:packages:myfolder:pixmatselect
	if (numpnts(rois)== 0)
		return Nan
	endif
	for (i=0; i<numpnts(rois); i+=1)
		if (rois[i]==1)
			pixsel = i
			break
		endif
	endfor
	return pixsel
end
	
function getfitboxselect()
	variable pixsel = 0
	variable i
	wave rois = root:packages:myfolder:fitboxselect
	if (numpnts(rois)== 0)
		return Nan
	endif
	for (i=0; i<numpnts(rois); i+=1)
		if (rois[i]==1)
			pixsel = i
			break
		endif
	endfor
	return pixsel
end	
	
// define the Fit Functions in the following lines
function fittohsi(selectspec)
	variable selectspec //0: select by counts, 1: select by selected roi (NaN wont be fitted)
	wave rois = root:packages:myfolder:roisw
	if (selectspec == 1)
		if (numpnts(rois)== 0)
			selectspec = 0
		else 
		variable roisel = getroiselect()
		endif
	endif
	wave fitselect = root:packages:myfolder:fitboxselect
	wave hsidata = root:hsi:spec:hsidata
	wave gridx = root:hsi:metadata:gridx
	wave gridy = root:hsi:metadata:gridy
	wave wl = root:hsi:metadata:wl
	wave pathnum = root:packages:myfolder:pathnum
	// iterators
	variable i, j, k
	//make/O/N=(3, 0) root:packages:fitdata:fitwave
	make/O/N=(pathnum[13]-pathnum[12], 0) root:packages:fitdata:fitwave
	make/O/N=(pathnum[13]-pathnum[12], 0) root:packages:fitdata:fitwl
	wave fitwave = root:packages:fitdata:fitwave
	wave fitwl = root:packages:fitdata:fitwl
	wave hsiint = root:HSI:pixmatrixfolder:pixmatrix1
	// put wl in fitwl
	for (i=0; i<pathnum[13]-pathnum[12]; i+=1)
		fitwl[i] = WL[i+pathnum[12]]
	endfor
	wave fitw = root:hsi:spec:fitparameter
	make/O/N=(50) root:packages:Fitdata:fitwpar
	wave fitstw = root:packages:Fitdata:fitwpar
	
	variable fitcurrpixel = 0 // fit the current pixel
	
	setdataFolder root:packages:fitdata
	for (i=0; i<numpnts(gridx); i+=1)
		for (j=0; j<numpnts(gridy); j+=1)
			if (hsiint[i][j] >= pathnum[14]) // fit only if pixel in pixmatrix1 > count threshold for fit
				for (k=0; k<numpnts(fitwl); k+=1)
					fitwave[k] = hsidata[i][j][k] // write spectrum to specarray
					
				endfor
				// do the fit to hsi[i][k]
				if (fitselect[0] == 1) // gaussian fit Gauss: fitw[0-7]
					curvefit/Q=1 gauss, fitwave /X=fitwl
					wave w_coef, w_sigma
					fitw[i][j][0] = w_coef[0]
					fitw[i][j][1] = w_coef[1]
					fitw[i][j][2] = w_coef[2]
					fitw[i][j][3] = w_coef[3]
					fitw[i][j][4] = w_sigma[0]
					fitw[i][j][5] = w_sigma[1]
					fitw[i][j][6] = w_sigma[2]
					fitw[i][j][7] = w_sigma[3]
				elseif (fitselect[1] == 1) // lorenz fit lorentzian: fitw[8-15]
					curvefit/Q=1 lor, fitwave /X=fitwl
					fitw[i][j][8] = w_coef[0]
					fitw[i][j][9] = w_coef[1]
					fitw[i][j][10] = w_coef[2]
					fitw[i][j][11] = w_coef[3]
					fitw[i][j][12] = w_sigma[0]
					fitw[i][j][13] = w_sigma[1]
					fitw[i][j][14] = w_sigma[2]
					fitw[i][j][15] = w_sigma[3]
				elseif (fitselect[2] == 1) // voigt fit voigt: fitw[16-25]
					curvefit/Q=1 voigt, fitwave /X=fitwl
					wave w_coef, w_sigma
					fitw[i][j][16] = w_coef[0]
					fitw[i][j][17] = w_coef[1]
					fitw[i][j][18] = w_coef[2]
					fitw[i][j][19] = w_coef[3]
					fitw[i][j][20] = w_coef[4]
					fitw[i][j][21] = w_sigma[0]
					fitw[i][j][22] = w_sigma[1]
					fitw[i][j][23] = w_sigma[2]
					fitw[i][j][24] = w_sigma[3]
					fitw[i][j][25] = w_sigma[4]
				elseif (fitselect[5] == 1)
					//curvefit/Q=1, 
				endif
				
			else
				fitw[i][j][0] = NaN
				fitw[i][j][1] = NaN
				fitw[i][j][2] = NaN
				fitw[i][j][3] = NaN
				fitw[i][j][4] = NaN
				fitw[i][j][5] = NaN
				fitw[i][j][6] = NaN
				fitw[i][j][7] = NaN
				fitw[i][j][8] = NaN
				fitw[i][j][9] = NaN
				fitw[i][j][10] = NaN
				fitw[i][j][11] = NaN
				fitw[i][j][12] = NaN
				fitw[i][j][13] = NaN
				fitw[i][j][14] = NaN
				fitw[i][j][15] = NaN
				fitw[i][j][16] = NaN
				fitw[i][j][17] = NaN
				fitw[i][j][18] = NaN
				fitw[i][j][19] = NaN
				fitw[i][j][20] = NaN
				fitw[i][j][21] = NaN
				fitw[i][j][22] = NaN
				fitw[i][j][23] = NaN
			endif
		endfor
	endfor
end

//from Klaus: Voigt fits
// VOIGT FUNCTIONS --> LORENTZ AND GAUSSIAN CAN ALSO BE OBTAINED FROM THIS FIT
Function FitManyVoigts(w, x) : FitFunc
    WAVE w      // must be of length 2 + 4 * n where n is the number of Voigt peaks to be fit
    variable x
    variable y0=w[0]
    variable slope = w[1]
    Variable cfi
    // cfi[i+2] = area under Voigt
    // cfi[i+3] = center
    // cfi[i+4] = Gaussian FWHM (must not be =0. Use a very small value,
    //i.e. 1e-6, with lw/gw --> inf for a perfect Lorentzian)
    // cfi[i+5] = Lorentzian FWHM (can be =0 for perfect Gaussian)
    Variable i
    Variable numPeaks = floor((numpnts(w)-2)/4)
    variable returnvalue = 0
    for (i = 0; i < numPeaks; i += 1)
        cfi = 4 * i
        make/FREE/N=5 dmyw
        dmyw = {0,w[cfi+2],w[cfi+3],w[cfi+4],w[cfi+5]/w[cfi+4]} // cfi[i] = Area, cfi[i+1] = center, cfi[i+2] = gaussian FWHM, cfi[i+3] = Lorentzian width. Gaussian width is not allowed to be exactly 0. Use very small number gw/lw --> 0 for a Lorentzian 
        returnvalue += VoigtPeak(dmyw,x)
    endfor
    returnvalue += y0 + slope*x
    return returnvalue
End

function cw2w(inw, copy, istai, cstai, n)
	wave inw
	wave copy
	variable istai
	variable cstai
	variable n
	variable i
	
	for (i=0; i<n; i+=1)
		copy[i+cstai] = inw[i+istai]
	endfor

end

Function PlotGaussian1(A, x_0, w_conf, xmin, xmax, numPoints)
    Variable A, x_0, w_conf, xmin, xmax, numPoints
    // Create the x-axis wave (wl) from xmin to xmax with numPoints points
    Make/O /N=(numPoints) wlgp
    wlgp = xmin + (xmax - xmin) * (p / (numPoints - 1))  // Linearly spaced points
    // Create Gaussian function wave
    Make/O/N=(numPoints) GaussianWave = A * exp(-((wlgp - x_0)^2) / (2 * w_conf^2))
    // Create a new graph and plot the Gaussian function
    //Display wlgp, GaussianWave
    display gaussianwave 

    // Label axes
    Label left "Amplitude"
    Label bottom "Wavelength (wl)"
End

Function PlotGaussian2(w, xax)
	wave w
    wave xax
    Make/O/N=(numpnts(xax)) GaussianWave = Gauss1d(w, xax)
    display gaussianwave vs xax

    // Label axes
    Label left "Amplitude"
    Label bottom "Wavelength (wl)"
End

Function Plotvoigt1(w, xax)
	wave w
    wave xax
    Make/O/N=(numpnts(xax)) GaussianWave = voigtpeak(w, xax)
    display gaussianwave vs xax

    // Label axes
    Label left "Amplitude"
    Label bottom "Wavelength (wl)"
End

Function Plotvoigt2(w, xax)
	wave w
    wave xax
    //xax-=xax[0]
    Make/O/N=(numpnts(xax)) GaussianWave = voigtpeak(w, xax)
    display gaussianwave vs xax

    // Label axes
    Label left "Amplitude"
    Label bottom "Wavelength (wl)"
End


