#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later

function myIO_Panel()
    // make global text wave to store paths and output folder
    // if (!WaveExists(root:Packages:myFolder:Path))
    //     NewDataFolder/O root:Packages
    //     NewDataFolder/O root:Packages:myFolder
    //     Make/T/O/N=3 root:Packages:myFolder:Path
    //     wave/T Path = root:Packages:myFolder:Path
    // endif

    NewPanel /W=(81,73,774,248)
    Button SelectFile1,pos={12.00,10.00},size={140.00,20.00},proc=ButtonProc,title="Select File No. 1"
    Button SelectFile2,pos={12.00,41.00},size={140.00,20.00},proc=ButtonProc,title="Select File No. 2"
    Button Output,pos={13.00,72.00},size={140.00,20.00},proc=ButtonProc,title="Select Data Folder"
    SetVariable File1,pos={168.00,13.00},size={500.00,14.00},value= Path[0]
    SetVariable File2,pos={168.00,43.00},size={500.00,14.00},value= Path[1]
    SetVariable File5,pos={168.00,75.00},size={500.00,14.00},value= Path[2]
    Button DoIt,pos={291.00,121.00},size={100.00,20.00},proc=ButtonProc,title="Do It"
end

function Panel()
     NewDataFolder/O root:Packages
     NewDataFolder/O root:Packages:myFolder
     Make/T/O/N=3 root:Packages:myFolder:Path
     wave/T Path = root:Packages:myFolder:Path
     
    NewPanel /W=(81,73,774,248)
    Button FilesDir,pos={13.00,10.00},size={140.00,20.00},proc=ButtonProc,title="Select Data Folder"
    SetVariable FilesDirDialog,pos={168.00,13.00},size={800.00,14.00},value= Path[0]
    Button DoIt,pos={13.00,41.00},size={100.00,20.00},proc=ButtonProc,title="Load Data"
    //Button FilesNames,pos={13.00,41.00},size={140.00,20.00},proc=ButtonProc,title="Files Name"
    //SetVariable FilesNamesDialog,pos={168.00,41.00},size={500.00,14.00},value= Path[1]
    //Button DoIt,pos={291.00,43.00},size={100.00,20.00},proc=ButtonProc,title="Do It"
    //Button FilesEnding,pos={13.00,72.00},size={140.00,20.00},proc=ButtonProc,title="Files Ending"
    //SetVariable FilesEndingDialog,pos={168.00,72.00},size={500.00,14.00},value= Path[2]
    //Button DoIt,pos={291.00,43.00},size={100.00,20.00},proc=ButtonProc,title="Load Data"
end

// define buttons
Function ButtonProc(ctrlName) : ButtonControl
    String ctrlName
   
        wave/T Path = root:Packages:myFolder:Path
        variable refnum
   
        strswitch(ctrlName)
       
            case "SelectFile1"  :
                // get File Paths
                Open/D/R/F="*.tif"/M="Select fist file" refNum
                if (strlen(S_FileName) == 0) // user cancelled or some error occured
                    return -1
                endif
                Path[0] = S_fileName
                break
       
            case "SelectFile2"  :
                // get File Paths
                Open/D/R/F="*.tif"/M="Select fist file" refNum
                if (strlen(S_FileName) == 0)
                    return -1
                endif
                Path[1] = S_fileName
                break
       
            case "FilesDir"   :
                // set outputfolder
                NewPath/Q/O OutputPath
                PathInfo OutputPath
                Path[0] = S_Path
                break
           
            case "DoIt" :      		
                LoadHSIData()
                break
       
        EndSwitch
End

function LoadHSIData()

	setdatafolder root:
	
    NewDataFolder/O root:Packages
    NewDataFolder/O root:Packages:myFolder
    Make/T/O/N=3 root:Packages:myFolder:Path
    wave/T Path = root:Packages:myFolder:Path
       		         		
    KillDataFolder/Z HSI
         		
    NewDataFolder/O root:HSI
    NewDataFolder/O root:HSI:metadata
    NewDataFolder/O root:HSI:spec
    NewDataFolder/O root:HSI:rawspecs
    
    setdatafolder root:HSI:metadata
    make/O WL
    make/O BG
    make/O gridx
    make/O gridy
    setdatafolder root:
    
    LoadDF1(Path[0])
    
end

function makeFigure(wX, wY)
	wave wX, wY
	Display wX vs wY
	ModifyGraph mode=4,marker=19,msize=5,lsize=2,lstyle=3,rgb=(52428,1,42942)
	Label left "\\Z14Speed"; DelayUpdate
	Label bottom "\\Z14Distance"; DelayUpdate
	ModifyGraph axThick=1.5
	ModifyGraph margin(left)=216, margin(bottim)=72, margin(right)=72, margin(top)=72
end function

function doFigureIfFlagged(wX, wY, doPlot)
	wave wX, wY
	int doPlot
	
	if(doPlot == 1)
		makeFigure(wX, wY)
	endif
end function

function loadfit() 
    string filename=""                             
    string pathname=""

    newpath/o temporaryPath
        if (v_flag!=0)
            return -1
        endif
    pathname= "temporarypath"

        /// Proceed to the loading waves from the selected folder!
end function  

static function /s sanitizeFPath(path)
    // Avoid annoyances with escape characters when using Microsoft Windows directories.
   
    string path
    path = replaceString("\t", path, "\\t")
    path = replaceString("\r", path, "\\r")
    path = replaceString("\n", path, "\\n")

    return path
end

function clearall()
	setdatafolder root:
	Killwaves/Z /A
	Killvariables/Z /A
	KillDataFolder/Z Packages
	KillDataFolder/Z HSI
	
end

// Given a path to a folder on disk, gets all files ending in "ext"
Function/S findallFiles(path, ext[, recurse])
// By default, subfolders are searched. Turn off with recurse=0.
// 2017-05-02, joel corbin
//
    string path, ext; variable recurse
   
    if (paramIsDefault(recurse))
        recurse=1
    endif
    path = sanitizeFilePath(path)                                               // may not work in extreme cases
   
    string fileList=""
    string files=""
    string pathName = "tmpPath"
    string folders =path+";"                                                    // Remember the full path of all folders in "path" & search each for "ext" files
    string fldr
    
    string thelist 
    variable nt
    
    do
        fldr = stringFromList(0,folders)
        NewPath/O/Q $pathName, fldr                                             // sets S_path=$path, and creates the symbolic path needed for indexedFile()
        PathInfo $pathName
        files = indexedFile($pathName,-1,ext)                                   // get file names
        if (strlen(files))
            files = fldr+":"+ replaceString(";", removeEnding(files), ";"+fldr+":") // add the full path (folders 'fldr') to every file in the list
            fileList = addListItem(files,fileList)
        endif
        if (recurse)
            folders += indexedDir($pathName,-1,1)                               // get full folder paths
        endif
        folders = removeFromList(fldr, folders)                                 // Remove the folder we just looked at
    while (strlen(folders))
    KillPath/Z $pathName
    //printf fileList
    printf "\n"
    printf stringFromList(3, filelist)
    
    nt = itemsInList(filelist)
    printf "\n" + num2str(nt)
   	
    return filelist
end

static function /s sanitizeFilePath(path)
    // Avoid annoyances with escape characters when using Microsoft Windows directories.
   
    string path
    path = replaceString("\t", path, "\\t")
    path = replaceString("\r", path, "\\r")
    path = replaceString("\n", path, "\\n")

    return path
end

Function LoadDF1(pathName)
	String pathName
	String extension
	string name
	string opennames 
	string specfolder = ":HSI:rawspecs:"
	string metadataf = ":HSI:metadata:"
	
	Variable refNum
	string filePath
	
 	name = "spectrum_"
 	extension = ".txt" 	
 	opennames = findallFiles(pathName, extension)
 	
 	variable ic
 	variable vin 
 	vin = itemsInList(opennames)
 	setdatafolder root:HSI:rawspecs
 	//wave wave1, wave2
 	string metadata
 	variable posx = 300
 	variable posy = 300
 	variable xmin = 300
 	variable xmax = 0
 	variable ymin = 300
 	variable ymax = 0
 	variable dx = 300
 	variable dy = 300
 	variable newdx = 0
 	variable newdy = 0
 	
 	for (ic=0; ic<vin; ic+=1)
 		string n1 = pathName + name + num2str(ic) + extension
 		string n2 = pathName + name + num2str(ic) + ".txt"
 		string n3 = pathName + name + num2str(ic)
 		string n4 = name + num2str(ic)
 		string n5 = pathName + name + num2str(ic) + ".ibw"
 		string n6 = name + num2str(ic) + ".txt"
 		string Laserpos = "Laser Position"
 	
		string linedata
		//Open /R /P=$n2 n2
		//Readthisline(n2, n4, 1, linedata)
 		
 		// read the file and read the data
 		Loadwave/N/O/G/Q n1 // /G for .txt instead of /H for .ibw
 		wave wave0, wave1, wave2
 		if (ic == 0)
 			duplicate/O wave0, root:HSI:metadata:WL
 			duplicate/O wave1, root:HSI:metadata:BG
 			//duplicate/O wave0, root:HSI:metadata:WL
 			//duplicate/O/rmd=[*][0,0] $n2, root:HSI:metadata:WL
 		endif
 		
 		wave2 -= wave1 //root:HSI:metadata:BG
 		duplicate/O wave2, $n4
 		
 		// first try to read x and y coordinates
 		Loadwave/O/Q n5 // now late .ibw file to obtain meta data
 		//sp1 = note($n6)
 		metadata = stringfromlist(2, note($n6))
 		killwaves $n6
 		
 		posx = str2num(stringfromlist(1, stringfromlist(22, metadata, "\n"), ":"))
 		posy = str2num(stringfromlist(1, stringfromlist(23, metadata, "\n"), ":"))
 		
 		if (posx < xmin)
 			xmin = posx
 		endif
 		newdx = posx - xmin
 		if (newdx < dx)
 			if (newdx > 0)
 				dx = posx - xmin
 			endif
 		endif
 		if (posx > xmax)
 			xmax = posx
 		endif
 		
 		if (posy < ymin)
 			ymin = posy
 		endif
 		
 		newdy = posy - ymin
 		if (newdy < dy)
 			if (newdy > 0)
 				dy = posy - ymin
 			endif
 		endif
 		if (posy > ymax)
 			posy = ymax
 		endif
 		
 		
 		//duplicate/O/rmd=[*][1,1] $n2, wave1
 		//duplicate/O/rmd=[*][2,2] $n2, wave2
 		
 		//wave1 -= wave2
 		//duplicate/O wave1, $n2 
 		
 		//duplicate/O wave2, $n4 //save BG
 		//appendtograph $n3 vs WL direct plot
 		
  	endfor
  	print "\n", xmin, xmax, xmin, xmax, dx, dy
  	killwaves wave0, wave1, wave2
  	
 	variable new
 	string gx = "gridx"
 	string gy = "gridy"
  	// generate dx and dy matrix axes
  	setdatafolder root:HSI:metadata:
  	for (ic=0; ic>=(xmax-xmin)*dx; ic+=1)
  		//new = ic*dx
  		//Edit/K=0
  		//gridx[ic] = new
  		//gridx[0] = 1
  	endfor
  	
  	setdatafolder root:HSI:spec
  	
  	Make/N=((xmax-xmin)/dx, (xmax-xmin)/dy, 1023) hsidata
  	
  	setdatafolder root:

END

// ReadThisLine(pathName, filePath, whichLine, data)
// Reads specified line number from file. Text is returned via data parameter.
// pathName is the name of an Igor symbolic path (see "Symbolic Paths" help topic).
// filePath is a file name, partial path or full path.
// If filePath is a full path then pathName can be "".
// The function result is 0 if the line was found, non-zero otherwise.
// Because the data is returned through a pass-by-reference parameter,
// this function can not be called from the command line. It must be
// called from another function.
// Example:
//  String data
//  Variable err = ReadThisLine("Igor", "License Agreement.txt", 2, data)
//  Print data
Function ReadThisLine(pathName, filePath, whichLine, data)
    String pathName     // Name of Igor symbolic path
    String filePath         // File name, partial path or full path
    Variable whichLine      // 0-based line number
    String& data            // Output
   
    data = ""
   
    Variable refNum

    Open /R /P=$pathName refNum as filePath
   
    Variable lineNumber = 0
    do
        String tmpData
        FReadLine refNum, tmpData
        if (strlen(tmpData) == 0)
            return -1           // Error - end of file
        endif
        if (lineNumber == whichLine)
            data = tmpData
            return 0            // Success
        endif
        lineNumber += 1
    while(1)
End

Function DemoReadThisLine()
    String data
    Variable err = ReadThisLine("Igor", "License Agreement.txt", 2, data)
    Print err, data
End

